PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant (experimenter use only)'], expName, expInfo['date'])
  Experiment info = {'participant (experimenter use only)': '', 'LC (experimenter use only)': "['GH', 'HH', 'NL']", 'LS (experimenter use only)': "['HL', 'LH']", 'Age': '', 'Gender': "['Female','Male','Trans male/Trans man','Trans female/Trans woman','Non-binary','Non-conforming','Prefer not to answer','Other; specify below']", 'Specify here if you selected "Other" for gender above:': '', 'Race/Ethnicity': "['American Indian or Alaska Native','Asian','Black or African American','Hispanic or Latino','Native Hawaiian or Pacific Islander','White','Prefer not to answer','Multiple/Other; specify below']", 'Specify here if you selected "Other" for race/ethnicity above:': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  expName = PElearningExperiment4-1-25
  keyboardBackend = PsychToolbox
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Routines
  Routine learning_feedback
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    CodeComponent learningFeedbackCODE
      Code Type = Auto->JS
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      Begin Experiment:
        health_modifier = 1 #starting modifier (full health)
      Begin Routine:
        if key_resp_learn.corr:
          feedback_tone = 'stimuli/bleep.wav'
          learn_acc_trig = 172
        else:
          feedback_tone = 'stimuli/buzz.wav'
          learn_acc_trig = 171
          health_score = health_score - 1 #hp reduction

        #multiplied by the height param of the health_fill poly to represent proportional health
        health_modifier = health_score/full_health_score #proportional health based on current hp
    SoundComponent feedbackSoundLearn
      sound [set every repeat] = $feedback_tone
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    SerialOutComponent learn_feedback_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = feedbackSoundLearn.status == STARTED
      startdata = $chr(170)
      stopVal [condition] = feedbackSoundLearn.status == FINISHED
      stopbits = 1
      stopdata = $chr(learn_acc_trig)
      syncScreenRefresh = False
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    TextComponent learn_trialNum_3
      letterHeight = textH
      pos = (0, .4)
      startVal [condition] = feedbackSoundLearn.status == STARTED
      stopVal [condition] = feedbackSoundLearn.status == FINISHED
      text [set every repeat] = $learn_trial_nums
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    ImageComponent alienBodyLearn2
      image = $alien_body_file
      size = [alienW, alienH]
      startVal [condition] = feedbackSoundLearn.status == STARTED
      stopVal [condition] = feedbackSoundLearn.status == FINISHED
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    GratingComponent alienEyeLearn2
      contrast = .5
      mask = circle
      ori [set every repeat] = learn_ori_val
      pos = (0, .1)
      sf [set every repeat] = learn_freq_val
      size = [eyeSize, eyeSize]
      startVal [condition] = feedbackSoundLearn.status == STARTED
      stopVal [condition] = feedbackSoundLearn.status == FINISHED
      tex = sin
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    ImageComponent explorerLearn2
      image = stimuli/spaceExplorer2.png
      pos [set every repeat] = (learn_explor_pos_LR, learn_explor_pos_UD)
      size = [explW, explH]
      startVal [condition] = feedbackSoundLearn.status == STARTED
      stopVal [condition] = feedbackSoundLearn.status == FINISHED
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    PolygonComponent health_border_3
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [condition] = feedbackSoundLearn.status == STARTED
      stopVal [condition] = feedbackSoundLearn.status == FINISHED
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    PolygonComponent health_fill_3
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every repeat] = (healthbarW, (healthbarH*health_modifier))
      startVal [condition] = feedbackSoundLearn.status == STARTED
      stopVal [condition] = feedbackSoundLearn.status == FINISHED
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  Routine learning_presentation
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    TextComponent learn_trialNum_2
      letterHeight = textH
      pos = (0, .4)
      startVal [condition] = alienBodyLearn.status == STARTED
      text [set every repeat] = $learn_trial_nums
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    ImageComponent alienBodyLearn
      image = $alien_body_file
      size = [alienW, alienH]
      startVal [frame N] = 0
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    SerialOutComponent learn_stim_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = alienBodyLearn.status == STARTED
      startdata = $chr(learn_ontrig)
      stopVal [condition] = len(_key_resp_learn_allKeys)
      stopbits = 1
      stopdata = $chr(learn_offtrig)
      syncScreenRefresh = False
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    GratingComponent alienEyeLearn
      color = 1, 1, 1
      contrast = .5
      mask = circle
      ori [set every repeat] = learn_ori_val
      pos = (0, .1)
      sf [set every repeat] = learn_freq_val
      size = [eyeSize, eyeSize]
      startVal [condition] = alienBodyLearn.status == STARTED
      tex = sin
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    ImageComponent explorerLearn
      image = stimuli/spaceExplorer2.png
      pos [set every repeat] = (learn_explor_pos_LR, learn_explor_pos_UD)
      size = [explW, explH]
      startVal [frame N] = 31
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    PolygonComponent learn_photo_box
      fillColor = white
      pos = (.95, 0)
      shape = rectangle
      size = (0.1, 0.4)
      startVal [condition] = alienBodyLearn.status == STARTED
      stopVal [condition] = len(_key_resp_learn_allKeys)
      units = norm
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    KeyboardComponent key_resp_learn
      allowedKeys [set every repeat] = learn_legal_keys
      correctAns = $learn_correct_key
      forceEndRoutine = True
      startVal [condition] = explorerLearn.status == STARTED
      storeCorrect = True
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    PolygonComponent health_border_2
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [condition] = alienBodyLearn.status == STARTED
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    PolygonComponent health_fill_2
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every repeat] = (healthbarW, (healthbarH*health_modifier))
      startVal [condition] = alienBodyLearn.status == STARTED
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    TextComponent learning_hint
      letterHeight = textH
      pos = (0, -.35)
      startVal [time (s)] = 5
      text = Reminder: use the arrow keys to move the space explorer towards friendly aliens and away from hostile ones
      wrapWidth = 1.2
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  Routine learning_instructions1
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    CodeComponent conditionSetupCODE
      Code Type = Py
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      Begin Experiment:
        if expInfo['LC (experimenter use only)'] == 'GH':
            friendly_label = 'havnori'
            hostile_label = 'gowachi'
            label_vol = 1
        elif expInfo['LC (experimenter use only)'] == 'HH':
            friendly_label = 'gowachi'
            hostile_label = 'havnori'
            label_vol = 1
        elif expInfo['LC (experimenter use only)'] == 'NL':
            friendly_label = 'no_label'
            hostile_label = 'no_label'
            label_vol = 0

        if expInfo['LS (experimenter use only)'] == 'HL':
            learning_sequence1 = 'conditions/oddhigh_conditions.xlsx'
            learning_sequence2 = 'conditions/oddlow_conditions.xlsx'
        elif expInfo['LS (experimenter use only)'] == 'LH':
            learning_sequence1 = 'conditions/oddlow_conditions.xlsx'
            learning_sequence2 = 'conditions/oddhigh_conditions.xlsx'
    ImageComponent alienBodyDemo1
      image = $alien_body_file
      pos = (.45, 0)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent alienEyeDemo1
      color = 1, 1, 1
      contrast = .5
      mask = circle
      ori = 41
      pos = (.45, .1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    ImageComponent explorerDemo1_L
      image = stimuli/spaceExplorer2.png
      pos = (.25, 0)
      size = [explW, explH]
      startVal [time (s)] = 0
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    TextComponent instructionLearn1
      letterHeight = textH
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      text = This simulation will teach you how to determine which aliens are safe to approach and which you should avoid. Your goal will be to direct the space explorer towards friendly aliens and away from hostile ones. To practice this, press either the left arrow key to indicate that the explorer should move away or the right arrow key to indicate they should approach.
      wrapWidth = .8
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    KeyboardComponent key_resp_learn_1
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    SerialOutComponent learn_instruction_trigs_1
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionLearn1.status == STARTED
      startdata = $chr(7)
      stopVal [condition] = len(_key_resp_learn_1_allKeys)
      stopbits = 1
      stopdata = $chr(8)
      syncScreenRefresh = True
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  Routine learning_instructions2
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    ImageComponent alienBodyDemo1_2
      image = $alien_body_file
      pos = (.45, 0)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent alienEyeDemo1_2
      color = 1, 1, 1
      contrast = .5
      mask = circle
      ori = 41
      pos = (.45, .1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    ImageComponent explorerDemo1_2_U
      image = stimuli/spaceExplorer2.png
      pos = (.45, .25)
      size = [explW, explH]
      startVal [time (s)] = 0
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    TextComponent instructionLearn_2
      letterHeight = textH
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      text = Good! Note that the explorer can appear on one of four sides around the alien: above, below, to the left, or to the right. In the case shown here, where the explorer appears above the alien, you would press the down key to indicate that the explorer should approach it (i.e., if you think the alien is friendly) or the up key to indicate that they should give it more space (i.e., if you think the alien is hostile). To practice this, press either the up or down arrow key to continue.
      wrapWidth = .8
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    KeyboardComponent key_resp_learn_2
      allowedKeys = 'up','down'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    SerialOutComponent learn_instruction_trigs_2
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionLearn_2.status == STARTED
      startdata = $chr(7)
      stopVal [condition] = len(_key_resp_learn_2_allKeys)
      stopbits = 1
      stopdata = $chr(8)
      syncScreenRefresh = True
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  Routine learning_instructions3
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    TextComponent instructionLearn_3
      letterHeight = textH
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = We will provide you with feedback during this training so you can learn which aliens are friendly and which are hostile. When you answer correctly, you will hear a ‘boop’ sound. Press the ‘c’ key to hear it now.
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    KeyboardComponent key_resp_learn_3
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    SerialOutComponent learn_instruction_trigs_3
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionLearn_3.status == STARTED
      startdata = $chr(7)
      stopVal [condition] = len(_key_resp_learn_3_allKeys)
      stopbits = 1
      stopdata = $chr(8)
      syncScreenRefresh = True
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  Routine feedbackDemoSetup
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        feedbackDemoSound = 'stimuli/no_label.wav'
      Each Frame:
        if t > .1:
            continueRoutine=False
    SoundComponent feedbackDemo
      sound [set every repeat] = $feedbackDemoSound
      startVal [time (s)] = .2
      stopVal [duration (s)] = 1.0
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  Routine exit_instructions
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    TextComponent instructionExit
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = Thank you so much for your hard work today. In the next and final section, questions about your experience today will appear at the top of the screen on each page. Please type your answer to each question and press the Enter (or Return) key to go to the next page. There are a total of 5 questions to answer. Press the spacebar to continue.
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    KeyboardComponent key_resp_exit_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    SerialOutComponent exit_instruction_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionExit.status == STARTED
      startdata = $chr(9)
      stopVal [condition] = len(_key_resp_exit_1_allKeys)
      stopbits = 1
      stopdata = $chr(10)
      syncScreenRefresh = True
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  Routine exit_questionnaire
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    CodeComponent exitResponseTextCODE
      Code Type = Auto->JS
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      Begin Routine:
        exitResponse.text=""
    TextComponent exitQ_number
      letterHeight = textH
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Question {} out of {}".format(exitQ_loop.thisN + 1, exitQ_loop.nTotal)
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    TextComponent exitQuestion
      letterHeight = textH
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $exitQ
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    TextboxComponent exitResponse
      bold = False
      editable = True
      letterHeight = textH
      size = (None, None)
      startVal [time (s)] = 0
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    TextComponent exitContinueText
      letterHeight = textH
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Press the Enter key to continue
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    KeyboardComponent key_resp_exit_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    SerialOutComponent exit_question_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = exitQuestion.status == STARTED
      startdata = $chr(181)
      stopVal [condition] = len(_key_resp_exit_2_allKeys)
      stopbits = 1
      stopdata = $chr(182)
      syncScreenRefresh = True
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  Routine experiment_end
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    SoundComponent end_chime
      sound = stimuli/ding.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent thank_you
      letterHeight = textH
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You are done! An experimenter will be in momentarily to remove the cap. Thank you for your time!
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  Routine same_diff
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    CodeComponent sd_end_display
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_sd.keys and frameN>12:
            continueRoutine = False
    TextComponent sd_trial_no_2
      letterHeight = textH
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sd_trial_nums
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    ImageComponent L_alien_body_sd
      image = stimuli/alienBody5.png
      pos = (-.15, 0)
      size = [alienW, alienH]
      startVal [frame N] = 0
      stopVal [duration (frames)] = 12
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    ImageComponent R_alien_body_sd
      image = stimuli/alienBody5.png
      pos = (.15, 0)
      size = [alienW, alienH]
      startVal [condition] = L_alien_body_sd.status == STARTED
      stopVal [condition] = L_alien_body_sd.status == FINISHED
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    GratingComponent L_alien_eye_sd
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      ori [set every repeat] = sd_L_eye_ori
      pos = (-.15, .1)
      sf [set every repeat] = sd_L_eye_sf
      size = [eyeSize, eyeSize]
      startVal [condition] = L_alien_body_sd.status == STARTED
      stopVal [condition] = L_alien_body_sd.status == FINISHED
      tex = sin
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    GratingComponent R_alien_eye_sd
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      ori [set every repeat] = sd_R_eye_ori
      pos = (.15, .1)
      sf [set every repeat] = sd_R_eye_sf
      size = [eyeSize, eyeSize]
      startVal [condition] = L_alien_body_sd.status == STARTED
      stopVal [condition] = L_alien_body_sd.status == FINISHED
      tex = sin
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    PolygonComponent sd_photo_box
      fillColor = white
      pos = (.95, 0)
      shape = rectangle
      size = (0.1, 0.4)
      startVal [condition] = L_alien_body_sd.status == STARTED
      stopVal [condition] = L_alien_body_sd.status == FINISHED
      units = norm
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    SerialOutComponent sd_stim_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = L_alien_body_sd.status == STARTED
      startdata = $chr(sd_ontrig)
      stopVal [condition] = L_alien_body_sd.status == FINISHED
      stopbits = 1
      stopdata = $chr(sd_offtrig)
      syncScreenRefresh = True
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    KeyboardComponent key_resp_sd
      allowedKeys = 's','d'
      correctAns = $sd_correct_key
      forceEndRoutine = False
      startVal [frame N] = 0
      store = first key
      storeCorrect = True
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    TextComponent sd_hint
      letterHeight = textH
      pos = (0, -.4)
      startVal [time (s)] = 5
      text = Reminder: same = 's' key; different = 'd' key
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  Routine learning_instructions4
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    SoundComponent correct_tone_instructions
      sound = stimuli/bleep.wav
      startVal [time (s)] = .1
      stopVal [duration (s)] = .25
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    TextComponent instructionLearn4a
      letterHeight = textH
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = We will provide you with feedback during this training so you can learn which aliens are friendly and which are hostile. When you answer correctly, you will hear a ‘boop’ sound. Press the ‘c’ key to hear it now.
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    TextComponent instructionLearn4b
      letterHeight = textH
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = When you answer incorrectly, you will hear a ‘buzz’ sound. Press the ‘i’ key to hear it now.
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    KeyboardComponent key_resp_learn_4
      allowedKeys = 'i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent learn_instruction_trigs_4
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionLearn4a.status == STARTED
      startdata = $chr(7)
      stopVal [condition] = len(_key_resp_learn_4_allKeys)
      stopbits = 1
      stopdata = $chr(8)
      syncScreenRefresh = True
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  Routine learning_instructions5
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    SoundComponent incorrect_tone_instructions
      sound = stimuli/buzz.wav
      startVal [time (s)] = .1
      stopVal [duration (s)] = .25
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    TextComponent instructionLearn5a
      letterHeight = textH
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = We will provide you with feedback during this training so you can learn which aliens are friendly and which are hostile. When you answer correctly, you will hear a ‘boop’ sound. Press the ‘c’ key to hear it now.
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    TextComponent instructionLearn5b
      letterHeight = textH
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = When you answer incorrectly, you will hear a ‘buzz’ sound. Press the ‘i’ key to hear it now.
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    SerialOutComponent learn_instruction_trigs_5
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionLearn5a.status == STARTED
      startdata = $chr(7)
      stopVal [condition] = instructionLearn5a.status == FINISHED
      stopbits = 1
      stopdata = $chr(8)
      syncScreenRefresh = True
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  Routine learning_label_instructions
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    CodeComponent labelONLYinstructionsCODE
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['LC (experimenter use only)'] == 'NL':
            continueRoutine=False
    TextComponent learning_label_instruction_text
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = Previous explorers have given names to the two species: Gowachi and Havnori. You will hear the name of the species of each alien you view in addition to the feedback sounds. Press the spacebar to continue.
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    KeyboardComponent label_instructions_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .5
      store = nothing
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    SerialOutComponent learn_label_instruction_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = learning_label_instruction_text.status == STARTED
      startdata = $chr(7)
      stopVal [condition] = len(_label_instructions_key_resp_allKeys)
      stopbits = 1
      stopdata = $chr(8)
      syncScreenRefresh = True
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  Routine learning_instructions6
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    TextComponent instructionLearn6
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = You are now ready to begin training! This task is divided into 10 sections after each of which you will be given the option to take a short break. The counter at the top will indicate your progress in the current section. Try to respond as quickly and accurately as possible. Press the spacebar when you are prepared to start.
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    KeyboardComponent key_resp_learn_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .5
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    SerialOutComponent learn_instruction_trigs_6
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionLearn6.status == STARTED
      startdata = $chr(7)
      stopVal [condition] = len(_key_resp_learn_6_allKeys)
      stopbits = 1
      stopdata = $chr(8)
      syncScreenRefresh = True
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  Routine sd_instructions1
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    CodeComponent stimSize
      Code Type = Auto->JS
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      Before Experiment:
        alienH = .4
        alienW = .2686

        eyeSize = .11

        explH = .1233
        explW = .1

        textH = .04
        fixationH = .1
    TextComponent instructionSD1
      letterHeight = textH
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Welcome trainee! You are about to take part in a training program to work with an extraterrestrial species. Before we begin your training, we have a simple task for you to complete. You will be presented very briefly with pairs of aliens like the ones shown here. Your task is to determine whether each pair is identical or not. If a pair is not identical, press the ‘d’ key to indicate they are different. If a pair is identical, press the ‘s’ key to indicate they are the same. Try it out with the pair shown here: press the ‘d’ key if they are different or the ‘s’ key if they are the same.
      wrapWidth = 1.2
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    ImageComponent L_alien_body_sd_instruction1
      image = stimuli/alienBody5.png
      pos = (-.15, -.2)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    ImageComponent R_alien_body_sd_instruction1
      image = stimuli/alienBody5.png
      pos = (.15, -.2)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent L_alien_eye_sd_instruction1
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      ori = 41
      pos = (-.15, -.1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    GratingComponent R_alien_eye_sd_instruction1
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      ori = 41
      pos = (.15, -.1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    KeyboardComponent instructionSD_keyboard1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent sd_instruction_trigs_1
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionSD1.status == STARTED
      startdata = $chr(5)
      stopVal [condition] = len(_instructionSD_keyboard1_allKeys)
      stopbits = 1
      stopdata = $chr(6)
      syncScreenRefresh = True
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  Routine sd_instructions2
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    CodeComponent sd_instruction_code
      Code Type = Auto->JS
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      Begin Routine:
        #use version 22.1.2
        opacClock = core.Clock()
      Each Frame:
        if opacClock.getTime() <= 0.2:
           SDop = 1
        elif opacClock.getTime() <= 1: #after 0.5 seconds
           SDop = 0
        if opacClock.getTime() >= 1:
            opacClock.reset()
      End Routine:
        sd_blink_counter = 0
    TextComponent instructionSD2
      letterHeight = textH
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Good! In the task itself, pairs of aliens will be quickly flashed on the screen to the left and right of the + symbol as shown here. Keep your gaze on the location of the + symbol between the aliens when they appear. Try to be as quick and accurate as possible and do your best not to blink while the aliens are on screen. Every 4 trials there will be a break for you to blink. When you are ready, press the spacebar to begin.
      wrapWidth = 1.2
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    TextComponent instruction_sd_fixation
      letterHeight = fixationH
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent L_alien_body_sd_instruction2
      image = stimuli/alienBody5.png
      opacity [set every frame] = SDop
      pos = (-.15, -.2)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    ImageComponent R_alien_body_sd_instruction2
      image = stimuli/alienBody5.png
      opacity [set every frame] = SDop
      pos = (.15, -.2)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent L_alien_eye_sd_instruction2
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      opacity [set every frame] = SDop
      ori = 41
      pos = (-.15, -.1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
      units = height
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    GratingComponent R_alien_eye_sd_instruction2
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      opacity [set every frame] = SDop
      ori = 41
      pos = (.15, -.1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    KeyboardComponent instructionSD_keyboard2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    SerialOutComponent sd_instruction_trigs_2
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionSD2.status == STARTED
      startdata = $chr(5)
      stopVal [condition] = len(_instructionSD_keyboard2_allKeys)
      stopbits = 1
      stopdata = $chr(6)
      syncScreenRefresh = True
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  Routine sd3_instructions
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    TextComponent sd3_instruction_text
      letterHeight = textH
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Well done! Now that you have mastered your training, we will ask you to complete one final session of the alien pair task, indicating when aliens are the same using the ‘s’ key and indicating when they are different using the ‘d’ key. After that, there will just be a few final questions for you to answer and you will be done! Press the spacebar when you are ready to continue.
      wrapWidth = 1.2
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    ImageComponent L_alien_body_sd3_instruction
      image = stimuli/alienBody5.png
      pos = (-.15, -.2)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    ImageComponent R_alien_body_sd3_instruction
      image = stimuli/alienBody5.png
      pos = (.15, -.2)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent L_alien_eye_sd3_instruction
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      ori = 41
      pos = (-.15, -.1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    GratingComponent R_alien_eye_sd3_instruction
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      ori = 41
      pos = (.15, -.1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    KeyboardComponent sd3_instruction_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    SerialOutComponent sd3_instruction_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = sd3_instruction_text.status == STARTED
      startdata = $chr(5)
      stopVal [condition] = len(_sd3_instruction_keyboard_allKeys)
      stopbits = 1
      stopdata = $chr(6)
      syncScreenRefresh = True
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  Routine learning2_instructions
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    CodeComponent health_reset_code
      Code Type = Auto->JS
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      Begin Routine:
        #sets health back to full for second half of task
        health_score = full_health_score
        health_modifier = health_score/full_health_score
    ImageComponent alienBodyDemo2
      image = $alien_body_file
      pos = (.45, 0)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent alienEyeDemo2
      color = 1, 1, 1
      contrast = .5
      mask = circle
      ori = 41
      pos = (.45, .1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    ImageComponent explorerDemo2_U
      image = stimuli/spaceExplorer2.png
      pos = (.45, .25)
      size = [explW, explH]
      startVal [time (s)] = 0
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    TextComponent instructionLearn2
      letterHeight = textH
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      wrapWidth = .8
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      text:
        You’re doing great! You are currently at the halfway point of your training. The second part of your training will take place on a different part of the planet. The same friendly and hostile species exist on this part of the planet.

        As before you will use the arrow keys to direct the space explorer towards friendly aliens and away from hostile ones. Press the spacebar when you are ready to continue.
    KeyboardComponent learning2_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    SerialOutComponent learn2_instruction_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionLearn2.status == STARTED
      startdata = $chr(19)
      stopVal [condition] = len(_learning2_keyboard_allKeys)
      stopbits = 1
      stopdata = $chr(19)
      syncScreenRefresh = True
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  Routine sd2_instructions
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    TextComponent sd2_instruction_text
      letterHeight = textH
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Great work so far. Before continuing to the second half of your training, you will be determining whether pairs of aliens are identical or not as you did before. Once again, you will indicate when aliens are the same using the ‘s’ key and indicate when they are different using the ‘d’ key. Press the spacebar when you are ready to continue.
      wrapWidth = 1.2
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    ImageComponent L_alien_body_sd2_instruction
      image = stimuli/alienBody5.png
      pos = (-.15, -.2)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    ImageComponent R_alien_body_sd2_instruction
      image = stimuli/alienBody5.png
      pos = (.15, -.2)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent L_alien_eye_sd2_instruction
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      ori = 41
      pos = (-.15, -.1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    GratingComponent R_alien_eye_sd2_instruction
      color = 1, 1, 1
      contrast = .5
      mask = gauss
      ori = 41
      pos = (.15, -.1)
      sf = 10
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    KeyboardComponent sd2_instruction_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    SerialOutComponent sd2_instruction_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = sd2_instruction_text.status == STARTED
      startdata = $chr(5)
      stopVal [condition] = len(_sd2_instruction_keyboard_allKeys)
      stopbits = 1
      stopdata = $chr(6)
      syncScreenRefresh = True
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  Routine learning_instructions0
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    TextComponent instructionLearn0
      letterHeight = textH
      pos = (0, .2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Welcome trainee! You are about to take part in a training program to differentiate between extraterrestrial species on a newly found planet.

        Two species exist on this planet: a friendly species that can be approached and a hostile species that must be avoided. Here you can see 4 different examples of aliens you might encounter. Note that differences in their eye patterns are what distinguish them from one another.

        It will be your job to determine what eye patterns are representative of friendliness and and which are a sign of hostility.
        Press the spacebar to continue
    ImageComponent alienBodyDemoLL
      image = $alien_body_file
      pos = (-.45, -.3)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent alienEyeDemoLL
      color = 1, 1, 1
      contrast = .5
      mask = circle
      ori = 78.75
      pos = (-.45, -.2)
      sf = 7
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    ImageComponent alienBodyDemoL
      image = $alien_body_file
      pos = (-.15, -.3)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent alienEyeDemoL
      color = 1, 1, 1
      contrast = .5
      mask = circle
      ori = 78.75
      pos = (-.15, -.2)
      sf = 11
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    ImageComponent alienBodyDemoR
      image = $alien_body_file
      pos = (.15, -.3)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent alienEyeDemoR
      color = 1, 1, 1
      contrast = .5
      mask = circle
      ori = -11.25
      pos = (.15, -.2)
      sf = 7
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    ImageComponent alienBodyDemoRR
      image = $alien_body_file
      pos = (.45, -.3)
      size = [alienW, alienH]
      startVal [time (s)] = 0
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    GratingComponent alienEyeDemoRR
      color = 1, 1, 1
      contrast = .5
      mask = circle
      ori = -11.25
      pos = (.45, -.2)
      sf = 11
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      tex = sin
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    KeyboardComponent key_resp_learn_0
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    SerialOutComponent learn_instruction_trigs_0
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = instructionLearn0.status == STARTED
      startdata = $chr(7)
      stopVal [condition] = len(_key_resp_learn_0_allKeys)
      stopbits = 1
      stopdata = $chr(8)
      syncScreenRefresh = True
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  Routine sd_blink
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    CodeComponent sd_blink_code
      Code Type = Auto->JS
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      Begin Routine:
        sd_blink_counter = sd_blink_counter + 1
        if sd_blink_counter == 4:
            sd_blink_counter = 0
        else:
            continueRoutine = False
    TextComponent sd_trial_no_3
      letterHeight = textH
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sd_trial_nums
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    TextComponent sd1_blink_text
      letterHeight = textH
      startVal [time (s)] = 0
      text = You can blink now! Press the spacebar to continue.
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    KeyboardComponent sd_blink_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    SerialOutComponent sd_blink_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [frame N] = 0
      startdata = $chr(179)
      stopVal [condition] = sd_blink_key.keys == 'space'
      stopbits = 1
      stopdata = $chr(180)
      syncScreenRefresh = True
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  Routine sd_resp_triggers
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    CodeComponent sd_resp_trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_sd.corr:
            sd_acc_trig = 169
        else:
            sd_acc_trig = 168
    SerialOutComponent sd_resp_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [time (s)] = 0
      startdata = $chr(167)
      stopVal [time (s)] = .1
      stopbits = 1
      stopdata = $chr(sd_acc_trig)
      syncScreenRefresh = True
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  Routine sd_fixation
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    CodeComponent sd_trial_no_code
      Code Type = Auto->JS
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      Begin Routine:
        sd_trial_nums = 'Progress: ' + str(currentLoop.thisN + 1) + ' of ' + str(currentLoop.nTotal)
    TextComponent sd_trial_no
      letterHeight = textH
      pos = (0, .4)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 30
      text [set every repeat] = $sd_trial_nums
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    TextComponent sd_fixation_cross
      letterHeight = fixationH
      pos = (0, .08)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 30
      text = +
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    SerialOutComponent sd_fix_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = sd_fixation_cross.status == STARTED
      startdata = $chr(177)
      stopVal [condition] = sd_fixation_cross.status == FINISHED
      stopbits = 1
      stopdata = $chr(178)
      syncScreenRefresh = True
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  Routine learning_fixation
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    CodeComponent learn_trial_no_code
      Code Type = Auto->JS
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      Begin Routine:
        learn_trial_nums = "Training Module Progress: " + str(currentLoop.thisN + 1) + " of " + str(currentLoop.nTotal);
    TextComponent learn_trialNum_1
      letterHeight = textH
      pos = (0, .4)
      startVal [condition] = fixationLearn.status == STARTED
      stopVal [condition] = fixationLearn.status == FINISHED
      text [set every repeat] = $learn_trial_nums
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    TextComponent fixationLearn
      letterHeight = fixationH
      pos = (0, .1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 30
      text = +
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    SerialOutComponent learn_fix_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = fixationLearn.status == STARTED
      startdata = $chr(177)
      stopVal [condition] = fixationLearn.status == FINISHED
      stopbits = 1
      stopdata = $chr(178)
      syncScreenRefresh = True
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    PolygonComponent health_border_1
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [condition] = fixationLearn.status == STARTED
      stopVal [condition] = fixationLearn.status == FINISHED
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    PolygonComponent health_fill_1
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every repeat] = (healthbarW, (healthbarH*health_modifier))
      startVal [condition] = fixationLearn.status == STARTED
      stopVal [condition] = fixationLearn.status == FINISHED
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  Routine learning_feedback_label
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    CodeComponent learningLabelFeedbackCODE
      Code Type = Auto->JS
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      Begin Routine:
        if learn_stim_type == 'friendly':
            labelLearn = 'stimuli/'+friendly_label+'.wav'
        elif learn_stim_type == 'hostile':
            labelLearn = 'stimuli/'+hostile_label+'.wav'

        if friendly_label == 'havnori':
            if learn_stim_type == 'friendly':
                label_trig = 174
            elif learn_stim_type == 'hostile':
                label_trig = 175
        elif friendly_label == 'gowachi':
            if learn_stim_type == 'friendly':
                label_trig = 175
            elif learn_stim_type == 'hostile':
                label_trig = 174
        else:
            label_trig = 176

        thisExp.addData('hostileLabel_learn', hostile_label)
    SoundComponent trainingLabelLearn
      saveStartStop = False
      sound [set every repeat] = $labelLearn
      startVal [time (s)] = 0
      stopVal [duration (s)] = .8
      volume [set every repeat] = label_vol
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    SerialOutComponent learn_label_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = trainingLabelLearn.status == STARTED
      startdata = $chr(173)
      stopVal [condition] = trainingLabelLearn.status == FINISHED
      stopbits = 1
      stopdata = $chr(label_trig)
      syncScreenRefresh = False
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    TextComponent learn_trialNum_4
      letterHeight = textH
      pos = (0, .4)
      startVal [condition] = trainingLabelLearn.status == STARTED
      stopVal [condition] = trainingLabelLearn.status == FINISHED
      text [set every repeat] = $learn_trial_nums
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    ImageComponent alienBodyLearn3
      image = $alien_body_file
      size = [alienW, alienH]
      startVal [condition] = trainingLabelLearn.status == STARTED
      stopVal [condition] = trainingLabelLearn.status == FINISHED
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    GratingComponent alienEyeLearn3
      contrast = .5
      mask = circle
      ori [set every repeat] = learn_ori_val
      pos = (0, .1)
      sf [set every repeat] = learn_freq_val
      size = [eyeSize, eyeSize]
      startVal [condition] = trainingLabelLearn.status == STARTED
      stopVal [condition] = trainingLabelLearn.status == FINISHED
      tex = sin
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    ImageComponent explorerLearn3
      image = stimuli/spaceExplorer2.png
      pos [set every repeat] = (learn_explor_pos_LR, learn_explor_pos_UD)
      size = [explW, explH]
      startVal [condition] = trainingLabelLearn.status == STARTED
      stopVal [condition] = trainingLabelLearn.status == FINISHED
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    PolygonComponent health_border_4
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [condition] = trainingLabelLearn.status == STARTED
      stopVal [condition] = trainingLabelLearn.status == FINISHED
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    PolygonComponent health_fill_4
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every repeat] = (healthbarW, (healthbarH*health_modifier))
      startVal [condition] = trainingLabelLearn.status == STARTED
      stopVal [condition] = trainingLabelLearn.status == FINISHED
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  Routine learning_blink
    CodeComponent learn_blink_code
      Code Type = Auto->JS
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      Begin Experiment:
        blink_counter = 0
      Begin Routine:
        if learning1_block_loop.nRemaining == 0:
            continueRoutine=False
        blink_counter = blink_counter + 1
        if blink_counter == 4:
            blink_counter = 0
        else:
            continueRoutine = False
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    TextComponent learn_trialNum_5
      letterHeight = textH
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $learn_trial_nums
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    TextComponent learning_blink_text
      letterHeight = textH
      pos = (0, -.1)
      startVal [time (s)] = 0
      units = height
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      text:
        You can blink now!
        Press the spacebar to continue.
    KeyboardComponent learning_blink_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    SerialOutComponent learn_blink_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [time (s)] = 0
      startdata = $chr(179)
      stopVal [condition] = len(_learning_blink_key_allKeys)
      stopbits = 1
      stopdata = $chr(180)
      syncScreenRefresh = False
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    PolygonComponent health_border_5
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [time (s)] = 0
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    PolygonComponent health_fill_5
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every repeat] = (healthbarW, (healthbarH*health_modifier))
      startVal [time (s)] = 0
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  Routine resting_closed
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    PolygonComponent resting_closed_photobox_pre
      fillColor = white
      pos = (.95, 0)
      shape = rectangle
      size = (0.1, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      units = norm
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    SerialOutComponent resting_closed_trigs_pre
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [time (s)] = .1
      startdata = $chr(1)
      stopVal [time (s)] = 29.9
      stopbits = 1
      stopdata = $chr(2)
      syncScreenRefresh = True
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  Routine resting_instructions_2
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    SoundComponent resting_chime_1
      sound = stimuli/ding.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent rest_instructions_open_pre
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = Now we will measure your resting activity again with your eyes open. When you are ready, please sit still and press the spacebar. Keep your eyes on the screen during this 30 second recording period, blinking naturally as needed.
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    KeyboardComponent resting_keyboard_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine resting_instructions_1
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    TextComponent rest_instructions_close_pre
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = Before we begin, we will be measuring your brain activity when at rest. When you are ready, please sit still, close your eyes, and press the spacebar. You will hear a chime after 30 seconds letting you know when to open your eyes again.
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    KeyboardComponent resting_keyboard_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine resting_open
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    PolygonComponent resting_open_photobox_pre
      fillColor = white
      pos = (.95, 0)
      shape = rectangle
      size = (0.1, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      units = norm
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    SerialOutComponent resting_open_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [time (s)] = .1
      startdata = $chr(3)
      stopVal [time (s)] = 29.9
      stopbits = 1
      stopdata = $chr(4)
      syncScreenRefresh = True
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  Routine break3
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    TextComponent break3_text
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = Time to take a break! An experimenter will be in momentarily.
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    KeyboardComponent break3_keys
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent break3_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [condition] = break3_text.status == STARTED
      startdata = $chr(19)
      stopVal [condition] = len(_break3_keys_allKeys)
      stopbits = 1
      stopdata = $chr(20)
      syncScreenRefresh = True
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  Routine resting_instructions_3
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    TextComponent rest_instructions_close_post
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = That concludes the experiment! We will now measure your resting brain activity once more. When you are ready, please sit still, close your eyes, and press the spacebar. You will hear a chime after 30 seconds letting you know when to open your eyes again.
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    KeyboardComponent resting_keyboard_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine resting_closed_post
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    PolygonComponent resting_closed_photobox_post
      fillColor = white
      pos = (.95, 0)
      shape = rectangle
      size = (0.1, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      units = norm
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    SerialOutComponent resting_closed_trigs_post
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [time (s)] = .1
      startdata = $chr(11)
      stopVal [time (s)] = 29.9
      stopbits = 1
      stopdata = $chr(12)
      syncScreenRefresh = True
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  Routine resting_instructions_4
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    SoundComponent resting_chime_2
      sound = stimuli/ding.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent rest_instructions_open_post
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = As before, we will now measure your resting activity with your eyes open. When you are ready, please sit still and press the spacebar. Keep your eyes on the screen during this 30 second recording period, blinking naturally as needed.
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    KeyboardComponent resting_keyboard_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine resting_open_post
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    PolygonComponent resting_open_photobox_post
      fillColor = white
      pos = (.95, 0)
      shape = rectangle
      size = (0.1, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      units = norm
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    SerialOutComponent resting_open_trigs_post
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [time (s)] = .1
      startdata = $chr(13)
      stopVal [time (s)] = 29.9
      stopbits = 1
      stopdata = $chr(14)
      syncScreenRefresh = True
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  Routine record_reminder
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    CodeComponent stim_setup
      Code Type = Auto->JS
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      Before Experiment:
        alienH = .4
        alienW = .2686

        eyeSize = .11

        explH = .1233
        explW = .1

        textH = .04
        fixationH = .1

        healthbarH = .4
        healthbarW = .06
        healthbarPosH = -.4
        healthbarPosV = -.2


        alien_body_file = 'stimuli/alienBody6.png'

        full_health_score = 20 #starting hp
        health_score = full_health_score
    TextComponent record_reminder_text
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = START RECORDING
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    KeyboardComponent record_reminder_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learning1_break1
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    CodeComponent learn1_break1_code
      Code Type = Auto->JS
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      Begin Routine:
        if learning1_oddcond_loop.nRemaining == 0:
            continueRoutine=False

        #give up to 10 hp after finishing each block
        if (full_health_score - health_score) < 10:
            health_score = full_health_score
        else:
            health_score = health_score + 10

        health_modifier = health_score/full_health_score

        learn1_break1_trig = learning1_oddcond_loop.thisN + 15
    TextComponent learn1_break1_text
      letterHeight = textH
      startVal [time (s)] = 0.0
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      text:
        Would you like to take a break before proceeding? If so, stay on this screen. Let the experimenter know if you need anything (they should be able to hear you through the microphone in the room).

        When you would like to proceed, press the spacebar.
    KeyboardComponent learn1_break1_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .1
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    SerialOutComponent learn1_break1_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [time (s)] = .1
      startdata = $chr(learn1_break1_trig)
      stopVal [condition] = len(_learn1_break1_keys_allKeys)
      stopbits = 1
      stopdata = $chr(learn1_break1_trig)
      syncScreenRefresh = True
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  Routine learning1_break2
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    CodeComponent skip_learn1_break2_code
      Code Type = Auto->JS
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      Begin Routine:
        if learning1_oddcond_loop.nRemaining == 0:
            continueRoutine=False
    TextComponent learn1_break2_text
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = The experimenter will now check to make sure your readings look good on their end. If everything is in order, they will progress you to the next screen. Otherwise, they may come in and make adjustments to the equipment momentarily.
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    KeyboardComponent learn1_break2_keys
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learning2_break1
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    CodeComponent skip_learn2_break1_code
      Code Type = Auto->JS
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      Begin Routine:
        if learning2_oddcond_loop.nRemaining == 0:
            continueRoutine=False

        if (full_health_score - health_score) < 10:
            health_score = full_health_score
        else:
            health_score = health_score + 10

        health_modifier = health_score/full_health_score

        learn2_break1_trig = learning2_oddcond_loop.thisN + 20
    TextComponent learn2_break1_text
      letterHeight = textH
      startVal [time (s)] = 0.0
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      text:
        Would you like to take a break before proceeding? If so, stay on this screen. Let the experimenter know if you need anything (they should be able to hear you through the microphone in the room).

        When you would like to proceed, press the spacebar.
    KeyboardComponent learn2_break1_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .1
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    SerialOutComponent learn2_break1_trigs
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = O
      port = COM4
      startVal [time (s)] = .1
      startdata = $chr(learn2_break1_trig)
      stopVal [condition] = len(_learn2_break1_keys_allKeys)
      stopbits = 1
      stopdata = $chr(learn2_break1_trig)
      syncScreenRefresh = True
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  Routine learning2_break2
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    CodeComponent skip_learn2_break2_code
      Code Type = Auto->JS
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      Begin Routine:
        if learning2_oddcond_loop.nRemaining == 0:
            continueRoutine=False
    TextComponent learn2_break2_text
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = The experimenter will now check to make sure your readings look good on their end. If everything is in order, they will progress you to the next screen. Otherwise, they may come in and make adjustments to the equipment momentarily.
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    KeyboardComponent learn2_break2_keys
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learning2_break0
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    TextComponent learn2_break0_text
      letterHeight = textH
      startVal [time (s)] = 0.0
      text = The experimenter will now check to make sure your readings look good on their end. If everything is in order, they will progress you to the next screen. Otherwise, they may come in and make adjustments to the equipment momentarily.
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    KeyboardComponent learn2_break0_keys
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learning_regen
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    CodeComponent learning_regen_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_score != 0:
            has_health = True
            continueRoutine=False
        else:
            has_health = False
            regen_timer = core.Clock()
      Each Frame:
        if has_health == False:
            regen_health = regen_timer.getTime()
            health_score = round(regen_timer.getTime())
            health_modifier = health_score/full_health_score
      End Routine:
        if has_health == False:
            health_score = 10
            health_modifier = health_score/full_health_score
            has_health = True
    ImageComponent explorerLearn4
      image = stimuli/spaceExplorer2.png
      pos = (-.2, 0)
      size = [explW, explH]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    PolygonComponent health_border_regen
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    PolygonComponent health_fill_regen
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every frame] = (healthbarW, (healthbarH*health_modifier))
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    TextComponent learning_text_regen
      letterHeight = textH
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = .4
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      text:
        The explorer has low health and needs to rest before continuing.
        Please wait.
  Routine TEST_DELETE
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    ImageComponent explorerLearn4_2
      image = stimuli/spaceExplorer2.png
      pos = (-.2, 0)
      size = [explW, explH]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    PolygonComponent health_border_6
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    TextComponent learning_regen_text_2
      letterHeight = textH
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = .4
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      text:
        The explorer has low health and needs to rest before continuing.
        Please wait.
  Routine learning_healthbar_instructions1
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    CodeComponent health_instructions_code_1
      Code Type = Auto->JS
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      Begin Routine:
        health_inst_timer = core.Clock()
      Each Frame:
        curr_health_inst_time = round(health_inst_timer.getTime())
        health_score_inst = 19 + (curr_health_inst_time % 2) #alternates between 1 and 0 based on timer in 1 sec increments
        health_modifier_inst = health_score_inst/full_health_score
    PolygonComponent health_border_instructions_1
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [time (s)] = 0
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    PolygonComponent health_fill_instructions_1
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every frame] = (healthbarW, (healthbarH*health_modifier_inst))
      startVal [time (s)] = 0
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    ImageComponent health_instructions_explorer_1
      image = stimuli/spaceExplorer2.png
      pos = (-.2, 0)
      size = [explW, explH]
      startVal [time (s)] = 0
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    TextComponent health_instructions_text_1
      letterHeight = textH
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      wrapWidth = .4
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      text:
        Additionally, your explorer's health is represented by this red health bar. Every time you make an incorrect response, the explorer's health will decrease.

        Press the spacebar to continue.
    KeyboardComponent health_instructions_keys_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine learning_healthbar_instructions2
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    CodeComponent health_instructions_code_2
      Code Type = Auto->JS
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      Begin Routine:
        health_inst_timer.reset()
      Each Frame:
        if round(health_inst_timer.getTime()) >= 11:
            health_inst_timer.reset()

        health_score_inst = round(health_inst_timer.getTime())
        health_modifier_inst = health_score_inst/full_health_score
    PolygonComponent health_border_instructions_2
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [time (s)] = 0
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    PolygonComponent health_fill_instructions_2
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every frame] = (healthbarW, (healthbarH*health_modifier_inst))
      startVal [time (s)] = 0
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    ImageComponent health_instructions_explorer_2
      image = stimuli/spaceExplorer2.png
      pos = (-.2, 0)
      size = [explW, explH]
      startVal [time (s)] = 0
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    TextComponent health_instructions_text_2
      letterHeight = textH
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      wrapWidth = .4
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      text:
        Don't worry if your explorer's health runs out! If this happens, your explorer will just need to rest for 10 seconds before continuing.

        Press the spacebar to continue.
    KeyboardComponent health_instructions_keys_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine learning_backmask
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    CodeComponent backmask_noise_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        noiseTexture = np.random.rand(128, 128) * 2.0 - 1.0
      Each Frame:
        noiseTexture = np.random.rand(128, 128) * 2.0 - 1.0
    TextComponent learn_trialNum
      letterHeight = textH
      pos = (0, .4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
      text [set every repeat] = $learn_trial_nums
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    GratingComponent noise_backmask_2
      contrast = .5
      mask = circle
      pos = (0, .1)
      sf [set every repeat] = .5
      size = [eyeSize, eyeSize]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
      tex [set every frame] = $noiseTexture
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    PolygonComponent health_border
      anchor = bottom-left
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.3961, -0.7333, -0.7333
      lineWidth = 4
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size = (healthbarW, healthbarH)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent health_fill
      anchor = bottom-left
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (healthbarPosH, healthbarPosV)
      shape = rectangle
      size [set every repeat] = (healthbarW, (healthbarH*health_modifier))
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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Flow
  Routine record_reminder
  Routine resting_instructions_1
  Routine resting_closed
  Routine resting_instructions_2
  Routine resting_open
  Routine learning_instructions0
  Routine learning_instructions1
  Routine learning_instructions2
  Routine learning_instructions3
  Routine learning_instructions4
  Routine learning_instructions5
  Routine learning_healthbar_instructions1
  Routine learning_healthbar_instructions2
  Routine learning_label_instructions
  Routine learning_instructions6
  LoopInitiator learning1_oddcond_loop loopType="TrialHandler"
    conditionsFile = $learning_sequence1
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'block': 'conditions/cond_oddhigh_1.xlsx'},
      {'block': 'conditions/cond_oddhigh_2.xlsx'},
      {'block': 'conditions/cond_oddhigh_3.xlsx'},
      {'block': 'conditions/cond_oddhigh_4.xlsx'},
      {'block': 'conditions/cond_oddhigh_5.xlsx'}]
    LoopInitiator learning1_block_loop loopType="TrialHandler"
      conditionsFile = $blocks
      loopType = sequential
      nReps = 1
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      Routine learning_fixation
      Routine learning_presentation
      Routine learning_feedback
      Routine learning_feedback_label
      Routine learning_backmask
      Routine learning_regen
      Routine learning_blink
    LoopTerminator learning1_block_loop
    Routine learning1_break1
    Routine learning1_break2
  LoopTerminator learning1_oddcond_loop
  Routine learning2_instructions
  Routine learning2_break0
  LoopInitiator learning2_oddcond_loop loopType="TrialHandler"
    conditionsFile = $learning_sequence2
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator learning2_block_loop loopType="TrialHandler"
      conditionsFile = $blocks
      loopType = sequential
      nReps = 1
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      Routine learning_fixation
      Routine learning_presentation
      Routine learning_feedback
      Routine learning_feedback_label
      Routine learning_regen
      Routine learning_blink
    LoopTerminator learning2_block_loop
    Routine learning2_break1
    Routine learning2_break2
  LoopTerminator learning2_oddcond_loop
  Routine resting_instructions_3
  Routine resting_closed_post
  Routine resting_instructions_4
  Routine resting_open_post
  Routine exit_instructions
  LoopInitiator exitQ_loop loopType="TrialHandler"
    conditionsFile = conditions/exitQuestions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'exitQ': 'What associations, if any, do you have with the word "gowachi"? What does it make you think of?'},
      {'exitQ': 'What associations, if any, do you have with the word "havnori"?  What does it make you think of?'},
      {'exitQ': 'How did you determine which aliens to approach? Which aliens to escape? What was the difference?'},
      {'exitQ': 'Did you come up with names of your own for the two species? If so, did it help you to categorize them?'}]
    Routine exit_questionnaire
  LoopTerminator exitQ_loop
  Routine experiment_end
